// Import receptor mechanisms
load_file("../mechanisms/receptorMechanisms.hoc")

begintemplate Layer5_pyr

// --------------------------------------------------------------------------------------
//                          Template for a Layer V Pyramidal Cell
// --------------------------------------------------------------------------------------
// "Reduced compartmental models of neocortical pyramidal cells" (Bush & Sejnowski; 1993)
// code adapted from https://senselab.med.yale.edu/ModelDB/ShowModel?model=113732

// Declare public variables
public init, setTopology, createSectionLists, setLengthsDiameters, setBiophysics
public synlist, x, y, z, setPosition, connect2target
public ampa, nmda, gabaa, gabab
public soma, dend
public all, somatic, dendritic, apical, basal
public pre, ampa, gabaa, gabab, nmda
objref synlist

// Create neural sections
create soma, dend[8]

// ----------------------------------------
// Constructor method
// ----------------------------------------
proc init() {
  setTopology()
  createSectionLists()
  setLengthsDiameters()
  setBiophysics()
  setNofSegments()
  synlist = new List()
  addSynapseMechanisms()
  x = y = z = 0 // only change via setPosition()
}

// ----------------------------------------
// Define neuron topology (i.e. section connections and locations)
// ----------------------------------------
proc setTopology() { local i

  // Connect sections
  connect dend(0), soma(1)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), soma(0) //was soma(1)this is correct! 
  for i = 6, 7 connect dend[i](0), dend[5](1)

  // Set section locations in space (note that these lengths must change together)
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(0, 23, 0, 1)}
  dend {pt3dclear() pt3dadd(0, 23, 0, 1) pt3dadd(0, 83, 0, 1)}
  dend[1] {pt3dclear() pt3dadd(0, 83, 0, 1) pt3dadd(-150, 83, 0, 1)}
  dend[2] {pt3dclear() pt3dadd(0, 83, 0, 1) pt3dadd(0, 483, 0, 1)}
  dend[3] {pt3dclear() pt3dadd(0, 483, 0, 1) pt3dadd(0, 883, 0, 1)}
  dend[4] {pt3dclear() pt3dadd(0, 883, 0, 1) pt3dadd(0, 1133, 0, 1)}
  dend[5] {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(0, -50, 0, 1)}
  dend[6] {pt3dclear() pt3dadd(0, -50, 0, 1) pt3dadd(-106, -156, 0, 1)}
  dend[7] {pt3dclear() pt3dadd(0, -50, 0, 1) pt3dadd(106, -156, 0, 1)}
}


// ----------------------------------------
// Create lists of section subgroups
// ----------------------------------------
objref all, somatic, dendritic, apical, basal
proc createSectionLists() { local i
  objref somatic, dendritic, apical, basal
  // Make list of all sections
  all = new SectionList()
  soma all.append()
  for i=0, 7 dend[i] all.append()
  // Make list containing the soma only
  somatic = new SectionList()
  soma somatic.append()
  // Make list of dendrites
  dendritic = new SectionList()
  for i=0, 7 dend[i] dendritic.append()
  // Make list of apical dendrites
  apical = new SectionList()
  for i=0, 4 dend[i] apical.append()
  // Make list of basal dendrites
  basal = new SectionList()
  for i=5, 7 dend[i] basal.append()
}


// ----------------------------------------
// Define section lengths and diameters
// ----------------------------------------
proc setLengthsDiameters() { // increased lengths and diams by 70% for human size
  forsec all {  }
    // soma.L = 13 //BUSH 1999 spike amp smaller
    soma.L = 39 // Bush 1993
    dend.L = 102
    dend[1].L = 255
    dend[2].L = 680 //default 400
    dend[3].L = 680 //default 400
    dend[4].L = 425
    dend[5].L = 85
    dend[6].L = 255 // default 150
    dend[7].L = 255 // default 150
      //soma.diam = 18.95 //Bush 1999
    soma.diam = 28.9 //Bush 1993
    dend.diam = 10.2
    dend[1].diam = 5.1
    dend[2].diam = 7.48 //default 4.4
    dend[3].diam = 4.93 //default 2.9
    dend[4].diam = 3.4
    dend[5].diam = 6.8
    dend[6].diam = 8.5
    dend[7].diam = 8.5
}

// ----------------------------------------
// Define section biophysics (inserting channels and channel properties)
// ----------------------------------------
proc setBiophysics() {
  // Set parameters for all sections
	forsec all{Ra=200 cm=0.85}
  // Set parameters for soma
	forsec somatic {
      insert hh gnabar_hh=0.16 gkbar_hh=0.01 gl_hh=0.0000426 el_hh=-65 //default -65
      insert ca gbar_ca=60
      insert cad taur_cad=20
      insert kca gbar_kca=0.0002 //0.0002 //(0.00015 mho/cm2= S/cm2)
      insert km gbar_km=200//200 //10 pS/um2
      insert cat gbar_cat=0.002
      insert ar gbar_ar=0.00006
	}
	forsec dendritic {
      insert hh gnabar_hh=0.14 gkbar_hh=0.01 gl_hh=0.0000426 el_hh=-71
      insert ca gbar_ca=60//100 //15 pS/um2
      insert cad taur_cad=20 //20 ms 
      insert kca gbar_kca=0.0002//0.0002 //0.015(mho/cm2= S/cm2)
      insert km gbar_km=200//200 //10 pS/um2
      insert cat gbar_cat=0
      insert ar gbar_ar=0
	} 
}

// ----------------------------------------
// Add receptor mechanisms to neural sections
// ----------------------------------------
objref ampa[9],nmda[9],gabaa[9],gabab[9]
proc addSynapseMechanisms() {
  dend[0]{ ampa[0] = new AMPA() nmda[0] = new NMDA() gabaa[0] = new GABAA() gabab[0] = new GABAB() }
  dend[1]{ ampa[1] = new AMPA() nmda[1] = new NMDA() gabaa[1] = new GABAA() gabab[1] = new GABAB() }           
  dend[2]{ ampa[2] = new AMPA() nmda[2] = new NMDA() gabaa[2] = new GABAA() gabab[2] = new GABAB() }           
  dend[3]{ ampa[3] = new AMPA() nmda[3] = new NMDA() gabaa[3] = new GABAA() gabab[3] = new GABAB() }           
  dend[4]{ ampa[4] = new AMPA() nmda[4] = new NMDA() gabaa[4] = new GABAA() gabab[4] = new GABAB() }           
  dend[5]{ ampa[5] = new AMPA() nmda[5] = new NMDA() gabaa[5] = new GABAA() gabab[5] = new GABAB() }           
  dend[6]{ ampa[6] = new AMPA() nmda[6] = new NMDA() gabaa[6] = new GABAA() gabab[6] = new GABAB() }           
  dend[7]{ ampa[7] = new AMPA() nmda[7] = new NMDA() gabaa[7] = new GABAA() gabab[7] = new GABAB() }           
  soma   { ampa[8] = new AMPA() nmda[8] = new NMDA() gabaa[8] = new GABAA() gabab[8] = new GABAB() }
}

// ----------------------------------------
// Set the number of segments (based on section length)
// ----------------------------------------
proc setNofSegments() {
  // soma area(.5) // make sure diam reflects 3d points
  forsec all { if (L < 50) {nseg=1} else {nseg=int(L/50)} }
}


// ----------------------------------------
// Auxiliary functions
// ----------------------------------------

// Update position based on function inputs
proc setPosition() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}

proc connect2target() { //$o1 target point process, $o2 returned NetCon
  soma $o2 = new NetCon(&v(1), $o1)
}

func is_art() { return 0 }

// End template
endtemplate Layer5_pyr